CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:GFP
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:GFP
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.9
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

CalculateMath:[module_num:7|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
    Name the output measurement:cellshapefactor
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:IdentifyPrimaryObjects
    Select the numerator measurement:AreaShape_MajorAxisLength
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:IdentifyPrimaryObjects
    Select the denominator measurement:AreaShape_MinorAxisLength
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\Users\\hehua\\Desktop\\newshape
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifyPrimaryObjects|AreaShape_MajorAxisLength,IdentifyPrimaryObjects|AreaShape_MinorAxisLength,IdentifyPrimaryObjects|Math_cellshapefactor
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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